<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="1.1" FeatureVersion="1.1" Originator="org.silastandard" Category="instruments.labware.manipulation" MaturityLevel="Draft"
         xmlns="http://www.sila-standard.org"
         xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
         xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
  <Identifier>LabwareTransferSiteController</Identifier>
  <DisplayName>Labware Transfer Site Controller Base</DisplayName>
  <Description>
    This feature (together with the &quot;Labware Transfer Manipulator Controller&quot;
    feature) provides commands to trigger the
    sub-tasks of handing over a labware item, e.g. a microtiter plate or a tube, from one
    device to another in a
    standardized and generic way.

    For each labware transfer a defined sequence of commands has to be called on both
    involved devices to ensure the
    proper synchronization of all necessary transfer actions without unwanted physical
    interferences and to optimize
    the transfer performance regarding the execution time. Using the generic commands,
    labware transfers between any
    arbitrary labware handling devices can be controlled (a robot device has not
    necessarily to be involved).

    Generally, a labware transfer is executed between a source and a destination device,
    where one of them is the
    active device (executing the handover actions) and the other one is the passive
    device.

    The &quot;Labware Transfer Site Controller&quot; feature is used to control the
    labware transfer on the side of the
    passive device to hand over labware to or take over labware from an active device,
    which provides the
    &quot;Labware Transfer Manipulator Controller&quot; feature.

    If a device is capable to act either as the active or as the passive device of a
    labware transfer it must provide
    both features.

    The complete sequence of issued transfer commands on both devices is as follows:

    1. Prior to the actual labware transfer a &quot;Prepare For Output&quot; command is
    sent to the source device to execute all
       necessary actions to be ready to release a labware item (e.g. open a tray) and
    simultaneously a &quot;Prepare For
       Input&quot; command is sent to the destination device to execute all necessary
    actions to be ready to receive a
       labware item (e.g. position the robotic arm near the tray of the source device).
    2. When both devices have successfully finished their &quot;Prepare For ...&quot;
    command execution, the next commands are
       issued.
    3a If the source device is the active device it will receive a &quot;Put Labware&quot;
    command to execute all necessary
       actions to put the labware item into the destination device. After the transfer has
    been finished successfully,
       the destination device receives a &quot;Labware Delivered&quot; command, that
    triggers all actions to be done after the
       labware item has been transferred (e.g. close the opened tray).
    3b If the destination device is the active device it will receive a &quot;Get
    Labware&quot; command to execute all necessary
       actions to get the labware from the source device (e.g. gripping the labware item).
    After that command has been
       finished successfully, the source device receives a &quot;Labware Removed&quot;
    command, that triggers all actions to be
       done after the labware item has been transferred (e.g. close the opened tray).

    The command sequences for a passive source or destination device have always to be as
    follows:
    - for a passive source device:        PrepareForOutput - LabwareRemoved
    - for a passive destination device:   PrepareForInput - LabwareDelivered

    If the commands issued by the client differ from the respective command sequences an
    &quot;Invalid Command Sequence&quot;
    error will be raised.

    To address the location, where a labware item can be handed over to or from other
    devices, every device must
    provide one or more uniquely named positions (handover positions) via the
    &quot;Available Handover Positions&quot; property.
    A robot (active device) should have at least one handover position for each device
    that it interacts with, whereas
    most passive devices will only have one handover position. In the case of a position
    array (e.g. a rack), the
    position within the array is specified via the sub-position of the handover position,
    passed as an index number.

    To address the positions within a device where the transferred labware item has to be
    stored at or is to be taken
    from (e.g. the storage positions inside an incubator), the internal position is
    specified. Each device must provide
    the number of available internal positions via the &quot;Number Of Internal
    Positions&quot; property. In the case of no
    multiple internal positions, this property as well as the &quot;Internal
    Position&quot; parameter value must be 1.

    With the &quot;Prepare For Input&quot; command there is also information about the
    labware transferred, like labware type or
    a unique labware identifier (e.g. a barcode).
  </Description>
  <Command>
    <Identifier>LabwareDelivered</Identifier>
    <DisplayName>LabwareDelivered</DisplayName>
    <Description>
      Notifies the passive destination device of a labware item that has been transferred to
      it.
      Sent after a &quot;Prepare For Input&quot; command.
    </Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>IntermediateActions</Identifier>
      <DisplayName>Intermediate Actions</DisplayName>
      <Description>Optional list of intermediate actions to execute.</Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>UUID of the labware item to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <IntermediateResponse>
      <Identifier>SecondsRemaining</Identifier>
      <DisplayName>Seconds Remaining</DisplayName>
      <Description>The estimated amount of seconds until the labware has been delivered.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>LabwareDeliveryFailed</Identifier>
      <Identifier>LabwareRetrievalFailed</Identifier>
      <Identifier>PositionOccupiedError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>LabwareRemoved</Identifier>
    <DisplayName>LabwareRemoved</DisplayName>
    <Description>
      Notifies the passive source device of a labware item that has been removed from it.
      Sent after a &quot;Prepare For Output&quot; command.Yields:
          SecondsRemaining: The estimated amount of seconds until the labware has been
      removed.
    </Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>IntermediateActions</Identifier>
      <DisplayName>Intermediate Actions</DisplayName>
      <Description>Optional list of intermediate actions to execute.</Description>
      <DataType>
        <List>
          <DataType>
            <Basic>String</Basic>
          </DataType>
        </List>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>UUID of the labware item to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <IntermediateResponse>
      <Identifier>IntermediateResponse0</Identifier>
      <DisplayName>Intermediate Response 0</DisplayName>
      <Description></Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>LabwareRetrievalFailed</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>PrepareForInput</Identifier>
    <DisplayName>Prepare For Input</DisplayName>
    <Description>
      Prepares the device into a state in which it is ready to accept labware at the
      specified handover position.
    </Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>HandoverPositionID</Identifier>
      <DisplayName>Handover Position ID</DisplayName>
      <Description>A unique identifier of the handover position where the labware will be received.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPositionID</Identifier>
      <DisplayName>Internal Position ID</DisplayName>
      <Description>A unique identifier of the internal position where the labware will be stored.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareTypeID</Identifier>
      <DisplayName>Labware Type ID</DisplayName>
      <Description>The unique identifier of the labware type to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>The unique identifier of the labware to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>TransactionToken</Identifier>
      <DisplayName>Transaction Token</DisplayName>
      <Description>A token that can be used to track the transaction of the labware retrieval.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>SecondsRemaining</Identifier>
      <DisplayName>Seconds Remaining</DisplayName>
      <Description>The estimated amount of seconds until the device is ready for the labware input.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>HandoverPositionUnknownError</Identifier>
      <Identifier>InternalPositionUnknownError</Identifier>
      <Identifier>LabwareIDUnknownError</Identifier>
      <Identifier>PositionOccupiedError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>PrepareForOutput</Identifier>
    <DisplayName>Prepare For Output</DisplayName>
    <Description>
      Prepares the device into a state in which it is ready to release labware at the
      specified handover position.
    </Description>
    <Observable>Yes</Observable>
    <Parameter>
      <Identifier>HandoverPositionID</Identifier>
      <DisplayName>Handover Position ID</DisplayName>
      <Description>A unique identifier of the handover position where the labware will be handed over.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPositionID</Identifier>
      <DisplayName>Internal Position ID</DisplayName>
      <Description>A unique identifier of the internal position where the labware will be stored.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareTypeID</Identifier>
      <DisplayName>Labware Type ID</DisplayName>
      <Description>The unique identifier of the labware type to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>The unique identifier of the labware to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>TransactionToken</Identifier>
      <DisplayName>Transaction Token</DisplayName>
      <Description>A token that can be used to track the transaction of the labware delivery.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Response>
    <IntermediateResponse>
      <Identifier>SecondsRemaining</Identifier>
      <DisplayName>Seconds Remaining</DisplayName>
      <Description>The estimated amount of seconds until the device is ready for the labware output.</Description>
      <DataType>
        <Basic>Integer</Basic>
      </DataType>
    </IntermediateResponse>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>HandoverPositionUnknownError</Identifier>
      <Identifier>InternalPositionUnknownError</Identifier>
      <Identifier>LabwareIDUnknownError</Identifier>
      <Identifier>PositionOccupiedError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>ReadyForDelivery</Identifier>
    <DisplayName>Ready For Delivery</DisplayName>
    <Description>
      Asks, if the device is ready to release labware at the specified handover position.
      This command is used to check if the device is ready to release labware at the
      specified handover position.
    </Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>HandoverPositionID</Identifier>
      <DisplayName>Handover Position ID</DisplayName>
      <Description>A unique identifier of the handover position where the labware will be handed over.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPositionID</Identifier>
      <DisplayName>Internal Position ID</DisplayName>
      <Description>The unique identifier of the internal position where the labware will be stored.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>The unique identifier of the labware to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>Response0</Identifier>
      <DisplayName>Response 0</DisplayName>
      <Description>True if the device is ready to deliver labware, otherwise False.</Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>HandoverPositionUnknownError</Identifier>
      <Identifier>InternalPositionUnknownError</Identifier>
      <Identifier>LabwareIDUnknownError</Identifier>
      <Identifier>PositionOccupiedError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Command>
    <Identifier>ReadyForRetrieval</Identifier>
    <DisplayName>Ready For Retrieval</DisplayName>
    <Description>
      Asks, if the device is ready to deliver labware at the specified handover position.
      This command is used to check if the device is ready to deliver labware at the
      specified handover position.
    </Description>
    <Observable>No</Observable>
    <Parameter>
      <Identifier>HandoverPositionID</Identifier>
      <DisplayName>Handover Position ID</DisplayName>
      <Description>A unique identifier of the handover position where the labware will be received.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>InternalPositionID</Identifier>
      <DisplayName>Internal Position ID</DisplayName>
      <Description>The unique identifier of the internal position where the labware will be stored.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Parameter>
      <Identifier>LabwareID</Identifier>
      <DisplayName>Labware ID</DisplayName>
      <Description>The unique identifier of the labware to ensure proper handling.</Description>
      <DataType>
        <Basic>String</Basic>
      </DataType>
    </Parameter>
    <Response>
      <Identifier>Response0</Identifier>
      <DisplayName>Response 0</DisplayName>
      <Description>
        True if the device is ready to deliver labware at the specified handover position,
        otherwise False.
      </Description>
      <DataType>
        <Basic>Boolean</Basic>
      </DataType>
    </Response>
    <DefinedExecutionErrors>
      <Identifier>CommandSequenceInvalidError</Identifier>
      <Identifier>HandoverPositionUnknownError</Identifier>
      <Identifier>InternalPositionUnknownError</Identifier>
      <Identifier>LabwareIDUnknownError</Identifier>
    </DefinedExecutionErrors>
  </Command>
  <Property>
    <Identifier>AvailableIntermediateActions</Identifier>
    <DisplayName>Available Intermediate Actions</DisplayName>
    <Description>
      Returns all commands that can be executed within a &quot;Put Labware&quot; or
      &quot;Get Labware&quot; command execution.
    </Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <Constrained>
            <DataType>
              <Basic>String</Basic>
            </DataType>
            <Constraints>
              <FullyQualifiedIdentifier>CommandIdentifier</FullyQualifiedIdentifier>
            </Constraints>
          </Constrained>
        </DataType>
      </List>
    </DataType>
  </Property>
  <Property>
    <Identifier>AvailableHandoverPositions</Identifier>
    <DisplayName>Available Handover Positions</DisplayName>
    <Description>All handover positions of the device including the number of sub-positions.</Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <Basic>String</Basic>
        </DataType>
      </List>
    </DataType>
  </Property>
  <Property>
    <Identifier>AvailableInternalPositions</Identifier>
    <DisplayName>Available Internal Positions</DisplayName>
    <Description>The number of addressable internal positions of the device.</Description>
    <Observable>No</Observable>
    <DataType>
      <List>
        <DataType>
          <Basic>String</Basic>
        </DataType>
      </List>
    </DataType>
  </Property>
  <DefinedExecutionError>
    <Identifier>CommandSequenceInvalidError</Identifier>
    <DisplayName>Command Sequence Invalid Error</DisplayName>
    <Description>
      Raised when the command sequence is invalid, such as when a command is called out of
      order.
    </Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>LabwareDeliveryFailed</Identifier>
    <DisplayName>Labware Delivery Failed</DisplayName>
    <Description>Raised when delivering a labware item to the destination device fails.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>LabwareRetrievalFailed</Identifier>
    <DisplayName>Labware Retrieval Failed</DisplayName>
    <Description>Raised when retrieving a labware item from the source device fails.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>PositionOccupiedError</Identifier>
    <DisplayName>Position Occupied Error</DisplayName>
    <Description>Raised when attempting to place labware in an already occupied position.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>HandoverPositionUnknownError</Identifier>
    <DisplayName>Handover Position Unknown Error</DisplayName>
    <Description>Raised when the UUID of a handover position is unknown.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>InternalPositionUnknownError</Identifier>
    <DisplayName>Internal Position Unknown Error</DisplayName>
    <Description>Raised when the UUID of an internal position is unknown.</Description>
  </DefinedExecutionError>
  <DefinedExecutionError>
    <Identifier>LabwareIDUnknownError</Identifier>
    <DisplayName>Labware ID Unknown Error</DisplayName>
    <Description>Raised when the UUID of a labware item is unknown.</Description>
  </DefinedExecutionError>
</Feature>
